# Generated by Configurator on Wed Apr 10 18:14:38 BST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,BaslerCamera,BaslerPylon,BaslerCamera

# Pre-init settings for devices
Property,BaslerCamera,SerialNumber,40069814

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,BaslerCamera
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,BaslerCamera,Binning,2

# Preset: Shutdown
ConfigGroup,System,Shutdown,BaslerCamera,Binning,1



# PixelSize settings

