# Generated by Configurator on Fri Jan 09 17:55:13 GMT 2026

# Reset
Property,Core,Initialize,0

# Devices
Device,OpenCVgrabber,OpenCVgrabber,OpenCVgrabber

# Pre-init settings for devices

Property,OpenCVgrabber,Camera,0

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,OpenCVgrabber
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,OpenCVgrabber,Binning,1
ConfigGroup,System,Startup,OpenCVgrabber,PixelType,8bit
ConfigGroup,System,Startup,OpenCVgrabber,Resolution,800x600



# PixelSize settings
