# Generated by Configurator on Mon Dec 15 16:55:00 GMT 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,OpenCVgrabber,OpenCVgrabber,OpenCVgrabber

# Pre-init settings for devices
Property,OpenCVgrabber,Camera,0

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,OpenCVgrabber
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup
ConfigGroup,System,Startup,OpenCVgrabber,PixelType,8bit


# PixelSize settings

